PsychoPy2experiment version="3.0.0b12"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1366, 768]
  expName = reversal learning
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Routines
  Routine feedback
    TextComponent textFeedback
      letterHeight = 150
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.7
      text [set every repeat] = $feedbackMsg
      units = pix
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  Routine instruction
    ImageComponent image
      image = ./rl_instruction_rev.png
      size = [1366, 768]
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_5
      allowedKeys = 'return','num_enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    PolygonComponent cross1
      fillColor = black
      lineColor = black
      shape = rectangle
      size = [5, 50]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = pix
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    PolygonComponent closs2
      fillColor = black
      lineColor = black
      ori = 90
      shape = rectangle
      size = [5, 50]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = pix
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    KeyboardComponent key_resp_correct
      allowedKeys [set every repeat] = correctAns
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 2
      storeCorrect = True
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    KeyboardComponent key_resp_faulse
      allowedKeys [set every repeat] = faulseAns
      correctAns = $faulseAns
      forceEndRoutine = True
      startVal [time (s)] = 2
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    PolygonComponent squre_right
      fillColor = white
      pos = [400, 0]
      shape = rectangle
      size = [300, 250]
      startVal [time (s)] = 2
      units = pix
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    PolygonComponent squre_left
      fillColor = $[1,1,1]
      pos = [-400, 0]
      shape = rectangle
      size = [300, 250]
      startVal [time (s)] = 2
      units = pix
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    PolygonComponent squre_top
      fillColor = white
      pos = [0, 200]
      shape = rectangle
      size = [300, 250]
      startVal [time (s)] = 2
      units = pix
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    PolygonComponent squre_bottom
      fillColor = white
      pos = [0, -200]
      shape = rectangle
      size = [300, 250]
      startVal [time (s)] = 2
      units = pix
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    PolygonComponent circle1
      fillColor = green
      lineColor = green
      nVertices = 40
      pos [set every repeat] = [stim1_posx, stim1_posy]
      shape = regular polygon...
      size = [250, 250]
      startVal [time (s)] = 2
      units = pix
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    PolygonComponent circle2
      fillColor = red
      lineColor = red
      nVertices = 40
      pos [set every repeat] = [stim2_posx, stim2_posy]
      shape = regular polygon...
      size = [250, 250]
      startVal [time (s)] = 2
      units = pix
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    CodeComponent code
      Code Type = Py
      End Routine:
        if  key_resp_correct.keys:
            feedbackMsg = u'Correct'
        else:
            feedbackMsg = u'False'
  Routine Thanks
    TextComponent text
      letterHeight = 36
      startVal [time (s)] = 0.0
      text = Thank you for your participation.
      units = pix
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    KeyboardComponent key_resp_4
      allowedKeys = 'return','num_enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine reversal
    PolygonComponent polygon
      fillColor = $[1,1,1]
      shape = rectangle
      size = [5, 50]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent polygon_2
      fillColor = $[1,1,1]
      shape = rectangle
      size = [50, 5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent red_circle
      fillColor = red
      nVertices = 100
      pos [set every repeat] = [stim1_posx, stim1_posy]
      shape = regular polygon...
      size = [250, 250]
      startVal [time (s)] = 1
      units = pix
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    PolygonComponent green_circle
      fillColor = green
      nVertices = 40
      pos [set every repeat] = [stim2_posx, stim2_posy]
      shape = regular polygon...
      size = [250, 250]
      startVal [time (s)] = 1
      units = pix
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    PolygonComponent squre_right2
      fillColor = $[1,1,1]
      pos = [400, 0]
      shape = rectangle
      size = [300, 250]
      startVal [time (s)] = 1
      units = pix
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    PolygonComponent squre_left2
      fillColor = $[1,1,1]
      pos = [-400, 0]
      shape = rectangle
      size = [300, 250]
      startVal [time (s)] = 1
      units = pix
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    PolygonComponent squre_top2
      fillColor = $[1,1,1]
      pos = [250, 0]
      shape = rectangle
      size = [300, 250]
      startVal [time (s)] = 1
      units = pix
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    PolygonComponent squre_bottom2
      fillColor = $[1,1,1]
      pos [set every repeat] = [-250, 0]
      shape = rectangle
      size = [300, 250]
      startVal [time (s)] = 1
      units = pix
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    KeyboardComponent key_resp_correct2
      allowedKeys [set every repeat] = correctAns
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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    KeyboardComponent key_resp_faulse2
      allowedKeys [set every repeat] = faulseAns
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine blank
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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Flow
  Routine instruction
  Routine blank
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = stim_pos_practice.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'correctAns': 'left', 'faulseAns': 'down', 'num_faulseAns': 2, 'stim2_posx': -400, 'stim2_posy': 0, 'num_correnctAns': 4, 'stim1_posy': -200, 'stim1_posx': 0},
      {'correctAns': 'up', 'faulseAns': 'right', 'num_faulseAns': 6, 'stim2_posx': 0, 'stim2_posy': 200, 'num_correnctAns': 8, 'stim1_posy': 0, 'stim1_posx': 400}]
    Routine trial
    Routine feedback
  LoopTerminator trials_3
  Routine instruction
  Routine blank
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stim_pos.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'correctAns': 'up', 'faulseAns': 'down', 'num_faulseAns': 2, 'stim2_posx': 0, 'stim2_posy': -200, 'end': 2, 'stim1_posx': 0, 'stim1_posy': 200, 'num_correctAns': 8},
      {'correctAns': 'up', 'faulseAns': 'left', 'num_faulseAns': 4, 'stim2_posx': -400, 'stim2_posy': 0, 'end': 2, 'stim1_posx': 0, 'stim1_posy': 200, 'num_correctAns': 8},
      {'correctAns': 'up', 'faulseAns': 'right', 'num_faulseAns': 6, 'stim2_posx': 400, 'stim2_posy': 0, 'end': 2, 'stim1_posx': 0, 'stim1_posy': 200, 'num_correctAns': 8},
      {'correctAns': 'down', 'faulseAns': 'up', 'num_faulseAns': 8, 'stim2_posx': 0, 'stim2_posy': 200, 'end': 2, 'stim1_posx': 0, 'stim1_posy': -200, 'num_correctAns': 2},
      {'correctAns': 'left', 'faulseAns': 'down', 'num_faulseAns': 2, 'stim2_posx': -400, 'stim2_posy': 0, 'end': 2, 'stim1_posx': 0, 'stim1_posy': -200, 'num_correctAns': 4},
      {'correctAns': 'down', 'faulseAns': 'right', 'num_faulseAns': 6, 'stim2_posx': 400, 'stim2_posy': 0, 'end': 2, 'stim1_posx': 0, 'stim1_posy': -200, 'num_correctAns': 2},
      {'correctAns': 'left', 'faulseAns': 'up', 'num_faulseAns': 8, 'stim2_posx': 0, 'stim2_posy': 200, 'end': 2, 'stim1_posx': -400, 'stim1_posy': 0, 'num_correctAns': 4},
      {'correctAns': 'left', 'faulseAns': 'down', 'num_faulseAns': 2, 'stim2_posx': 0, 'stim2_posy': -200, 'end': 2, 'stim1_posx': -400, 'stim1_posy': 0, 'num_correctAns': 4},
      {'correctAns': 'left', 'faulseAns': 'right', 'num_faulseAns': 6, 'stim2_posx': 400, 'stim2_posy': 0, 'end': 2, 'stim1_posx': -400, 'stim1_posy': 0, 'num_correctAns': 4}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
    Routine trial
    Routine feedback
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = stim_pos_rev.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'correctAns': 'down', 'faulseAns': 'up', 'num_faulseAns': 8, 'stim2_posx': 0, 'stim2_posy': -200, 'end': 2, 'num_correctAns': 2, 'stim1_posy': 200, 'stim1_posx': 0},
      {'correctAns': 'left', 'faulseAns': 'up', 'num_faulseAns': 8, 'stim2_posx': -400, 'stim2_posy': 0, 'end': 2, 'num_correctAns': 4, 'stim1_posy': 200, 'stim1_posx': 0},
      {'correctAns': 'right', 'faulseAns': 'up', 'num_faulseAns': 8, 'stim2_posx': 400, 'stim2_posy': 0, 'end': 2, 'num_correctAns': 6, 'stim1_posy': 200, 'stim1_posx': 0},
      {'correctAns': 'up', 'faulseAns': 'down', 'num_faulseAns': 2, 'stim2_posx': 0, 'stim2_posy': 200, 'end': 2, 'num_correctAns': 8, 'stim1_posy': -200, 'stim1_posx': 0},
      {'correctAns': 'down', 'faulseAns': 'left', 'num_faulseAns': 4, 'stim2_posx': -400, 'stim2_posy': 0, 'end': 2, 'num_correctAns': 2, 'stim1_posy': -200, 'stim1_posx': 0},
      {'correctAns': 'right', 'faulseAns': 'down', 'num_faulseAns': 2, 'stim2_posx': 400, 'stim2_posy': 0, 'end': 2, 'num_correctAns': 6, 'stim1_posy': -200, 'stim1_posx': 0},
      {'correctAns': 'up', 'faulseAns': 'left', 'num_faulseAns': 4, 'stim2_posx': 0, 'stim2_posy': 200, 'end': 2, 'num_correctAns': 8, 'stim1_posy': 0, 'stim1_posx': -400},
      {'correctAns': 'down', 'faulseAns': 'left', 'num_faulseAns': 4, 'stim2_posx': 0, 'stim2_posy': -200, 'end': 2, 'num_correctAns': 2, 'stim1_posy': 0, 'stim1_posx': -400},
      {'correctAns': 'right', 'faulseAns': 'left', 'num_faulseAns': 4, 'stim2_posx': 400, 'stim2_posy': 0, 'end': 2, 'num_correctAns': 6, 'stim1_posy': 0, 'stim1_posx': -400}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
    Routine trial
    Routine feedback
  LoopTerminator trials_2
  Routine Thanks
